PsychoPy2experiment version="2021.1.2"
Settings
  Audio lib = pygame
  Data filename = u'data/%s_%s_%s' % (expInfo['Résztvevő kódja'], expName, expInfo['date'])
  Experiment info = {'Résztvevő kódja': '', 'Nem': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = alszo_teszt
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Routines
  Routine trial
    CodeComponent sound_code
      Code Type = Auto->JS
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      Begin Routine:
        sound_file = "stimuli/hangfajlok/" + str(hangfajl) + ".wav"
    SoundComponent sound_1
      sound [set every repeat] = $sound_file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_2
      allowedKeys = 'u'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 3
      text = Ismételje el a hallott szót!
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  Routine instr
    TextComponent inst_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Kedves résztvevő!

        A következő feladatban különböző hosszúságú, furcsa hangzású, értelmetlen szavakat fog meghallgatni. Próbálja meg a lehető legpontosabban visszamondani őket a kísérletvezetőnek!

        A soron következő szót a kísérletvezető fogja elindítani.

        Fontos, hogy végig nagyon figyeljen, mert egy szót csak egyszer fog hallani!
    TextComponent space_inst
      color = black
      letterHeight = 0.05
      pos = (0, -0.38)
      startVal [time (s)] = 8
      text = A kezdéshez nyomja meg a SPACE gombot!
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 8
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  Routine begin
    TextComponent text
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Készüljön, a kísérlet hamarosan elindul!
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  Routine fx
    TextComponent fx_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine vege
    TextComponent kosznojuk
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Köszönjük a részvételt!

        A SPACE gomb megnyomásával kiléphet a kísérletből.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  Routine begin
  LoopInitiator hangok loopType="TrialHandler"
    conditionsFile = stimuli\hangok_stim.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'szo': 'gáv', 'hangfajl': 'alszo_01'},
      {'szo': 'gyem', 'hangfajl': 'alszo_02'},
      {'szo': 'Szan', 'hangfajl': 'alszo_03'},
      {'szo': 'dolk', 'hangfajl': 'alszo_04'},
      {'szo': 'zomás', 'hangfajl': 'alszo_05'},
      {'szo': 'galonc', 'hangfajl': 'alszo_06'},
      {'szo': 'Gabam', 'hangfajl': 'alszo_07'},
      {'szo': 'ardul', 'hangfajl': 'alszo_08'},
      {'szo': 'tarembik', 'hangfajl': 'alszo_09'},
      {'szo': 'cselika', 'hangfajl': 'alszo_10'},
      {'szo': 'hübedin', 'hangfajl': 'alszo_11'},
      {'szo': 'vazóga', 'hangfajl': 'alszo_12'},
      {'szo': 'tipebanér', 'hangfajl': 'alszo_13'},
      {'szo': 'limefürék', 'hangfajl': 'alszo_14'},
      {'szo': 'serkápanta', 'hangfajl': 'alszo_15'},
      {'szo': 'berszidelén', 'hangfajl': 'alszo_16'},
      {'szo': 'hápamarogány', 'hangfajl': 'alszo_17'},
      {'szo': 'gyilonitora', 'hangfajl': 'alszo_18'},
      {'szo': 'tesilbengecsék', 'hangfajl': 'alszo_19'},
      {'szo': 'fortiklempelsz', 'hangfajl': 'alszo_20'},
      {'szo': 'abalamofálsag', 'hangfajl': 'alszo_21'},
      {'szo': 'sémernyegvőterec', 'hangfajl': 'alszo_22'},
      {'szo': 'hulukatánatalm', 'hangfajl': 'alszo_23'},
      {'szo': 'innécsésziderszil', 'hangfajl': 'alszo_24'},
      {'szo': 'dögeliztetmereni', 'hangfajl': 'alszo_25'},
      {'szo': 'kusztenirselemenég', 'hangfajl': 'alszo_26'},
      {'szo': 'intogszocolarásu', 'hangfajl': 'alszo_27'},
      {'szo': 'töminégeveltemérg', 'hangfajl': 'alszo_28'},
      {'szo': 'igyótanumazálubirc', 'hangfajl': 'alszo_29'},
      {'szo': 'polankilimapszilógis', 'hangfajl': 'alszo_30'},
      {'szo': 'elüsekéketésenim', 'hangfajl': 'alszo_31'},
      {'szo': 'réfjenólpáulatamú', 'hangfajl': 'alszo_32'}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
    Routine fx
    Routine trial
  LoopTerminator hangok
  Routine vege
